PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s/ses-%s/sub-%s_ses-%s_%s_events' % (expInfo['participant'], expInfo['session'], expInfo['participant'], expInfo['session'], expName)
  End Message = Thank you for participating!
  Experiment info = {'participant': '200', 'session': "['bathroom','kitchen']", 'session_number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['break.jpg']
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1280, 720]
  expName = image_similarity_rating
  keyboardBackend = Pyglet
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Routines
  Routine instructions
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    KeyboardComponent startResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent full_screen
      Code Type = JS
      Begin JS Routine:
        // full screen
        psychoJS.window.fullscr = true;
        psychoJS.window.adjustScreenSize();
    ImageComponent slide_img
      image [set every repeat] = $slide
      size = (1.7, 1.7*0.56)
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent positions
      Code Type = Auto->JS
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      Begin Experiment:
        img_x_pos = 7
        img1pos = -img_x_pos
        img2pos = img_x_pos
      Begin Routine:
        if random() > 0.5:
            img1pos = -img_x_pos
            img2pos = img_x_pos
        else:
            img1pos = img_x_pos
            img2pos = -img_x_pos
      End Routine:
        thisExp.addData('stim1pos', img1pos)
        thisExp.addData('stim2pos', img2pos)
        thisExp.addData('block', blockN-1)
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      pos = $(img1pos*x_scale, 4*y_scale)
      shape = rectangle
      size = (8.2*x_scale, 8.2*x_scale*0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      pos = $(img2pos*x_scale, 4*y_scale)
      shape = rectangle
      size = (8.2*x_scale, 8.2*x_scale*0.75)
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image [set every repeat] = $stim1
      pos [set every repeat] = $(img1pos*x_scale, 4*y_scale)
      size [set every repeat] = (8*x_scale, 8*x_scale*0.75)
      startVal [time (s)] = 0
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    ImageComponent image2
      image [set every repeat] = $stim2
      pos [set every repeat] = $(img2pos*x_scale, 4*y_scale)
      size [set every repeat] = (8*x_scale, 8*x_scale*0.75)
      startVal [time (s)] = 0
      texture resolution = 512
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    SliderComponent rating_1
      color = white
      fillColor = black
      font = Verdana
      forceEndRoutine = False
      granularity = 1
      labels = ("1 - not similar at all", 2, 3, 4, 5, 6, "7 - very similar")
      letterHeight = 0.35*y_scale
      pos [set every repeat] = (0, -3.5*y_scale)
      size [set every repeat] = (12*x_scale, 0.75*y_scale)
      startVal [time (s)] = 0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question
      font = Verdana
      letterHeight [set every repeat] = 0.7*y_scale
      pos [set every repeat] = (0, -2*y_scale)
      startVal [time (s)] = 0
      text = Content
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    SliderComponent rating_2
      color = white
      fillColor = black
      font = Verdana
      forceEndRoutine = False
      granularity = 1
      labels = ("1 - not similar at all", 2, 3, 4, 5, 6, "7 - very similar")
      letterHeight = 0.35*y_scale
      pos [set every repeat] = (0, -7*y_scale)
      size [set every repeat] = (12*x_scale, 0.75*y_scale)
      startVal [time (s)] = 0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question_2
      font = Verdana
      letterHeight [set every repeat] = 0.7*y_scale
      pos [set every repeat] = (0, -5.5*y_scale)
      startVal [time (s)] = 0
      text = Drawing style/ability
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    CodeComponent wait_for_both_sliders
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        if 'escape' in keys:
            core.quit()

        if 'space' in keys:
            # check how many ratings have been completed:
            completed_ratings = 0
            for scale in [rating_1, rating_2]:
                if scale.getRating() is not None:
                    completed_ratings = completed_ratings + 1

            if completed_ratings == 2:
                continueRoutine = False # end now
  Routine end
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    TextComponent message_end
      color = black
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The end!

        Thank you for participating
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine block
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    TextComponent block_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        New block

        Press space to start
  Routine breakBlocks
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    CodeComponent break_2
      Code Type = Both
      Before JS Experiment:
        var blockN = 1;
        var maxBlock = 6;
      Begin Experiment:
        blockN = 1
        maxBlock = 10
      Begin JS Routine:
        break_instructions = new visual.TextStim({
            win: psychoJS.window,
            text: `Great job! You can take a break now. \n\n Press space to start block ${blockN} of ${maxBlock}.`,
            height: 0.05,
            color: new util.Color('black')
        });


        //   do not show if block is not over yet
        if (((trials.thisN > 0) && ((trials.thisN % 63) !== 0))) {
            continueRoutine = false;
        } else {
            // do not show before first block
            if ((blockN === 1)) {
                blockN = (blockN + 1);
                continueRoutine = false;
            } else {
                console.log(blockN)
                break_instructions.setAutoDraw(true);
                blockN = (blockN + 1);
            }
        }
      Begin Routine:
        break_instructions = visual.TextStim(
            win = win,
            text = f"Great job! You can take a break now. \n\n Press space to start block {blockN} of {maxBlock}.",
            height = 0.05,
            color = "black")

        # do not show if block is not over yet
        if trials.thisN > 0 and trials.thisN % 63 != 0:
            continueRoutine = False
        else:
            # do not show before first block
            if blockN == 1:
                blockN = blockN + 1
                continueRoutine = False
            else:
                break_instructions.setAutoDraw(True)
                blockN = blockN + 1
      End JS Routine:
        break_instructions.setAutoDraw(false);
      End Routine:
        break_instructions.setAutoDraw(False)
    KeyboardComponent startBlock
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preparation
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    CodeComponent scale_set_up
      Code Type = Both
      Before JS Experiment:
        var ysize = 0;
      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin JS Experiment:
        // screen scaling set up
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = psychoJS.window.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
    CodeComponent full_screen_scaling
      Code Type = JS
      Begin JS Routine:
        // full screen
        psychoJS.window.fullscr = true;
        psychoJS.window.adjustScreenSize();
    CodeComponent condition_matrix
      Code Type = Auto->JS
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      End Routine:
        # Specify the file path based on the 'session'
        trial_condition_path = "conditions/conditions_" + expInfo['session'] + ".csv"
        practice_file_path = "conditions/practice_cond_" + expInfo['session'] + ".csv"
        instructions_file_path = "instructions/instructions_" + expInfo['session'] + ".xlsx"

        # Set the random seed based on the participant number
        seed_num = int(expInfo['participant'])
    CodeComponent output_dir
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        # Construct the path with placeholders replaced by actual values
        output_dir_path = "data/sub-" + expInfo['participant'] + "/ses-" + expInfo['session']

        # Check if the path exists
        if not os.path.exists(output_dir_path):
            # Create the directory, including all intermediate directories
            os.makedirs(output_dir_path)
            print(f"Directory '{output_dir_path}' was created.")
            output_dir_path_exist = 0
        else:
            print(f"Directory '{output_dir_path}' already exists.")
            output_dir_path_exist = 1
  Routine practice_over
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice is over.
        Well done!

        Press space to proceed to experiment.
    KeyboardComponent space_practice_over
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine preparation
  LoopInitiator instructionsLoop loopType="TrialHandler"
    conditionsFile = $instructions_file_path
    loopType = sequential
    nReps = 1
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    conditions:
      [{'slide': 'instructions/Slide2.jpg'},
      {'slide': 'instructions/Slide3.jpg'},
      {'slide': 'instructions/Slide4.jpg'},
      {'slide': 'instructions/Slide5.jpg'},
      {'slide': None},
      {'slide': None}]
    Routine instructions
  LoopTerminator instructionsLoop
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = $practice_file_path
    loopType = random
    nReps = 1
    random seed = seed_num
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    conditions:
      [OrderedDict([('sub1', 110), ('sub2', 133), ('pairID', 'practice'), ('trialID', 1), ('stim1', 'stimuli/own/kitchen/110_kit.jpg'), ('stim2', 'stimuli/own/kitchen/133_kit.jpg')]),
      OrderedDict([('sub1', 110), ('sub2', 128), ('pairID', 'practice'), ('trialID', 2), ('stim1', 'stimuli/own/kitchen/110_kit.jpg'), ('stim2', 'stimuli/own/kitchen/128_kit.jpg')]),
      OrderedDict([('sub1', 128), ('sub2', 108), ('pairID', 'practice'), ('trialID', 3), ('stim1', 'stimuli/own/kitchen/128_kit.jpg'), ('stim2', 'stimuli/own/kitchen/108_kit.jpg')]),
      OrderedDict([('sub1', 110), ('sub2', 107), ('pairID', 'practice'), ('trialID', 4), ('stim1', 'stimuli/own/kitchen/110_kit.jpg'), ('stim2', 'stimuli/own/kitchen/107_kit.jpg')]),
      OrderedDict([('sub1', 107), ('sub2', 108), ('pairID', 'practice'), ('trialID', 5), ('stim1', 'stimuli/own/kitchen/107_kit.jpg'), ('stim2', 'stimuli/own/kitchen/108_kit.jpg')]),
      OrderedDict([('sub1', 128), ('sub2', 133), ('pairID', 'practice'), ('trialID', 6), ('stim1', 'stimuli/own/kitchen/128_kit.jpg'), ('stim2', 'stimuli/own/kitchen/133_kit.jpg')]),
      OrderedDict([('sub1', 107), ('sub2', 128), ('pairID', 'practice'), ('trialID', 7), ('stim1', 'stimuli/own/kitchen/107_kit.jpg'), ('stim2', 'stimuli/own/kitchen/128_kit.jpg')]),
      OrderedDict([('sub1', 108), ('sub2', 110), ('pairID', 'practice'), ('trialID', 8), ('stim1', 'stimuli/own/kitchen/108_kit.jpg'), ('stim2', 'stimuli/own/kitchen/110_kit.jpg')])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
    Routine trial
    Routine ITI
  LoopTerminator practice
  Routine practice_over
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $trial_condition_path
    loopType = random
    nReps = 1
    random seed = seed_num
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    conditions:
      [OrderedDict([('sub1', 105), ('sub2', 132), ('pairID', 157), ('trialID', 1), ('stim1', 'stimuli/own/bathroom/105_bat.jpg'), ('stim2', 'stimuli/own/bathroom/132_bat.jpg')]),
      OrderedDict([('sub1', 109), ('sub2', 130), ('pairID', 214), ('trialID', 2), ('stim1', 'stimuli/own/bathroom/109_bat.jpg'), ('stim2', 'stimuli/own/bathroom/130_bat.jpg')]),
      OrderedDict([('sub1', 122), ('sub2', 129), ('pairID', 483), ('trialID', 3), ('stim1', 'stimuli/own/bathroom/122_bat.jpg'), ('stim2', 'stimuli/own/bathroom/129_bat.jpg')]),
      OrderedDict([('sub1', 120), ('sub2', 126), ('pairID', 446), ('trialID', 4), ('stim1', 'stimuli/own/bathroom/120_bat.jpg'), ('stim2', 'stimuli/own/bathroom/126_bat.jpg')]),
      OrderedDict([('sub1', 118), ('sub2', 131), ('pairID', 411), ('trialID', 5), ('stim1', 'stimuli/own/bathroom/118_bat.jpg'), ('stim2', 'stimuli/own/bathroom/131_bat.jpg')]),
      OrderedDict([('sub1', 102), ('sub2', 141), ('pairID', 69), ('trialID', 6), ('stim1', 'stimuli/own/bathroom/102_bat.jpg'), ('stim2', 'stimuli/own/bathroom/141_bat.jpg')]),
      OrderedDict([('sub1', 131), ('sub2', 135), ('pairID', 588), ('trialID', 7), ('stim1', 'stimuli/own/bathroom/131_bat.jpg'), ('stim2', 'stimuli/own/bathroom/135_bat.jpg')]),
      OrderedDict([('sub1', 111), ('sub2', 136), ('pairID', 247), ('trialID', 8), ('stim1', 'stimuli/own/bathroom/111_bat.jpg'), ('stim2', 'stimuli/own/bathroom/136_bat.jpg')])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
    Routine breakBlocks
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine end
