PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s/ses-%s/sub-%s_ses-%s_%s_events' % (expInfo['participant'], expInfo['session'], expInfo['participant'], expInfo['session'], expName)
  End Message = Thank you for participating!
  Experiment info = {'participant': '200', 'age': '', 'gender': "['female','male','diverse']", 'session': "['bathroom','kitchen']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['break.jpg']
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  expName = image_similarity_rating
  keyboardBackend = Pyglet
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Routines
  Routine instructions
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    KeyboardComponent startResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent full_screen
      Code Type = JS
      Begin JS Routine:
        // full screen
        psychoJS.window.fullscr = true;
        psychoJS.window.adjustScreenSize();
    ImageComponent slide_img
      image [set every repeat] = $slide
      size = (1.7, 1.7*0.56)
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent positions
      Code Type = Both
      Before JS Experiment:
        // disable contect menu for right mouse clicks
        document.addEventListener('contextmenu',event => event.preventDefault());
      Begin Experiment:
        img1pos = -4.5
        img2pos = 4.5
      Begin JS Experiment:
        img1pos = (-4.5);
        img2pos = 4.5;
      Begin JS Routine:
        if ((Math.random() > 0.5)) {
            img1pos = (-4.5);
            img2pos = 4.5;
        } else {
            img1pos = 4.5;
            img2pos = (-4.5);
        }
      Begin Routine:
        if random() > 0.5:
            img1pos = -4.5
            img2pos = 4.5
        else:
            img1pos = 4.5
            img2pos = -4.5
      End JS Routine:
        psychoJS.experiment.addData("img1pos", img1pos);
        psychoJS.experiment.addData("img2pos", img2pos);
        psychoJS.experiment.addData("block", blockN-1);
      End Routine:
        thisExp.addData('stim1pos', img1pos)
        thisExp.addData('stim2pos', img2pos)
        thisExp.addData('block', blockN-1)
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      pos = $(img1pos*x_scale, 4*y_scale)
      shape = rectangle
      size = (6*x_scale+0.005, 6*x_scale*0.75+0.005)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      pos = $(img2pos*x_scale, 4*y_scale)
      shape = rectangle
      size = (6*x_scale+0.005, 6*x_scale*0.75+0.005)
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image [set every repeat] = $stim1
      pos [set every repeat] = $(img1pos*x_scale, 4*y_scale)
      size [set every repeat] = (6*x_scale, 6*x_scale*0.75)
      startVal [time (s)] = 0
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    ImageComponent image2
      image [set every repeat] = $stim2
      pos [set every repeat] = $(img2pos*x_scale, 4*y_scale)
      size [set every repeat] = (6*x_scale, 6*x_scale*0.75)
      startVal [time (s)] = 0
      texture resolution = 512
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    SliderComponent slider
      color = white
      fillColor = black
      font = Verdana
      forceEndRoutine = False
      granularity = 1
      labels = ("1 - not similar at all", 2, 3, 4, 5, 6, "7 - very similar")
      letterHeight = 0.35*y_scale
      pos [set every repeat] = (0, -2.5*y_scale)
      size [set every repeat] = (12*x_scale, 0.5*y_scale)
      startVal [time (s)] = 0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question
      font = Verdana
      letterHeight [set every repeat] = 0.7*y_scale
      pos [set every repeat] = (0, -1*y_scale)
      startVal [time (s)] = 0
      text = Content
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    SliderComponent slider_2
      color = white
      fillColor = black
      font = Verdana
      forceEndRoutine = False
      granularity = 1
      labels = ("1 - not similar at all", 2, 3, 4, 5, 6, "7 - very similar")
      letterHeight = 0.35*y_scale
      pos [set every repeat] = (0, -6.5*y_scale)
      size [set every repeat] = (12*x_scale, 0.5*y_scale)
      startVal [time (s)] = 0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question_2
      font = Verdana
      letterHeight [set every repeat] = 0.7*y_scale
      pos [set every repeat] = (0, -5*y_scale)
      startVal [time (s)] = 0
      text = Drawing style
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    KeyboardComponent press_spce
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine attentionCheck
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    TextComponent attention_check
      color = black
      font = Verdana
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Attention Check

        What is your task in this study? Please select the correct option by clicking on it with the mouse.
    TextComponent one
      color = black
      font = Verdana
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = 1) Select the more colorful object.
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    TextComponent two
      color = black
      font = Verdana
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = 2) Determine if two objects are the same or different.
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    TextComponent three
      color = black
      font = Verdana
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 3) Rate how similar two objects are on a scale from 1 to 7.
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    MouseComponent mouse
      clickable = one, two, three
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent message
      Code Type = Both
      End JS Routine:
        if ((mouse.clicked_name[0] === "three")) {
            feedbackMsg = `Great, you passed the attention check! \n Press space to start block ${blockN} of ${maxBlock}.`;
            endMsg = 'Thanks for taking part! \n\nPress space to close the study.';
            showTrials = 1;
        } else {
            endMsg = 'Unfortunately you did not pass the attention check and therefore can not participate. \n\nThank you for your interest in our study! \n\nPress space to close the study.';
            showTrials = 0;
        }

        psychoJS.experiment.addData("attCheckAns", mouse.clicked_name[0]);
      End Routine:
        if mouse.clicked_name[0] == 'three':
            feedbackMsg = f'Great, you passed the attention check! \nPress space to start block {blockN} of {maxBlock}.'
            endMsg = 'Thanks for taking part! \n\nPress space to close the study.'
            showTrials = 1
        else:
            endMsg = 'Unfortunately you did not pass the attention check and therefore can not participate. \n\nThank you for your interest in our study! \n\nPress space to close the study.'
            showTrials = 0
        thisExp.addData("attCheckAns", mouse.clicked_name[0])
  Routine end
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    TextComponent message_end
      color = black
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $endMsg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine block
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    TextComponent block_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        New block

        Press space to start
  Routine break_3
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent break_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
  Routine breakBlocks
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    CodeComponent break_2
      Code Type = Both
      Before JS Experiment:
        var blockN = 1;
        var maxBlock = 6;
      Begin Experiment:
        blockN = 1
        maxBlock = 6
      Begin JS Routine:
        break_instructions = new visual.TextStim({
            win: psychoJS.window,
            text: `Great job! You can take a break now. \n\n Press space to start block ${blockN} of ${maxBlock}.`,
            height: 0.05,
            color: new util.Color('black')
        });


        //   do not show if block is not over yet
        if (((trials.thisN > 0) && ((trials.thisN % 100) !== 0))) {
            continueRoutine = false;
        } else {
            // do not show before first block
            if ((blockN === 1)) {
                blockN = (blockN + 1);
                continueRoutine = false;
            } else {
                console.log(blockN)
                break_instructions.setAutoDraw(true);
                blockN = (blockN + 1);
            }
        }
      Begin Routine:
        break_instructions = visual.TextStim(
            win = win,
            text = f"Great job! You can take a break now. \n\n Press space to start block {blockN} of {maxBlock}.",
            height = 0.05,
            color = "black")

        # do not show if block is not over yet
        if trials.thisN > 0 and trials.thisN % 100 != 0:
            continueRoutine = False
        else:
            # do not show before first block
            if blockN == 1:
                blockN = blockN + 1
                continueRoutine = False
            else:
                break_instructions.setAutoDraw(True)
                blockN = blockN + 1
      End JS Routine:
        break_instructions.setAutoDraw(false);
      End Routine:
        break_instructions.setAutoDraw(False)
    KeyboardComponent startBlock
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block1
    RoutineSettingsComponent block1
      disabled = True
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    TextComponent block1_instructions
      font = Verdana
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to start block 1 of 6.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consentForm
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    CodeComponent skip_offline
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('consentForm.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['agree_consent'] = psychoJS.experiment._currentTrialData['agree'];
  Routine dataProtectionForm
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    CodeComponent skip_offline_data
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading_data
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe_data
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('dataProtection.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['agree_data'] = psychoJS.experiment._currentTrialData['agree'];
  Routine screenScaling
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    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Routine:
        print('key start')
        event.clearEvents()

        ysize=win.size[0]/win.size[1]
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            screen_width=round(ysize*10/x_scale)/10
            print('height [cm]:', screen_height)
            print('width [cm]:', screen_width)
            #text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('x_scale',x_scale)
        thisExp.addData('y_scale',y_scale)
        thisExp.addData('screen_height', screen_height)
        thisExp.addData('screen_width', screen_width)

        if screen_height > 12 and screen_width > 15.0:
            min_height = 1
        else:
            min_height = 0
            endMsg = 'Thank you for your interest in our study. \nUnfortunately your screen is too small and you cannot participate. \n\nPress space to close the study.'

        thisExp.addData('min_height', min_height)
    TextComponent text_top
      color = black
      font = Verdana
      letterHeight = 0.07
      pos = (0, .6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      color = black
      font = Verdana
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine preparation
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    CodeComponent scale_set_up
      Code Type = Both
      Before JS Experiment:
        var ysize = 0;
      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin JS Experiment:
        // screen scaling set up
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = psychoJS.window.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
    CodeComponent full_screen_scaling
      Code Type = JS
      Begin JS Routine:
        // full screen
        psychoJS.window.fullscr = true;
        psychoJS.window.adjustScreenSize();
    CodeComponent condition_matrix
      Code Type = Auto->JS
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      End Routine:
        # Specify the file path based on the 'session'
        trial_condition_path = "conditions/conditions_" + expInfo['session'] + ".csv"
        practice_file_path = "conditions/practice_cond_" + expInfo['session'] + ".csv"
        instructions_file_path = "instructions/instructions_" + expInfo['session'] + ".xlsx"

        # Set the random seed based on the participant number
        seed_num = int(expInfo['participant'])
    CodeComponent output_dir
      Code Type = Auto->JS
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      Begin Routine:
        # Construct the path with placeholders replaced by actual values
        output_dir_path = "data/sub-" + expInfo['participant'] + "/ses-" + expInfo['session']

        # Check if the path exists
        if not os.path.exists(output_dir_path):
            # Create the directory, including all intermediate directories
            os.makedirs(output_dir_path)
            print(f"Directory '{output_dir_path}' was created.")
        else:
            print(f"Directory '{output_dir_path}' already exists.")
  Routine practice_over
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice is over.
        Well done!

        Press space to proceed to experiment.
    KeyboardComponent space_practice_over
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine preparation
  LoopInitiator instructionsLoop loopType="TrialHandler"
    conditionsFile = $instructions_file_path
    loopType = sequential
    nReps = 1
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    conditions:
      [{'slide': 'instructions/Slide2.jpg'},
      {'slide': 'instructions/Slide3.jpg'},
      {'slide': 'instructions/Slide4.jpg'},
      {'slide': 'instructions/Slide5.jpg'},
      {'slide': None},
      {'slide': None}]
    Routine instructions
  LoopTerminator instructionsLoop
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = $practice_file_path
    loopType = random
    nReps = 1
    random seed = seed_num
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    conditions:
      [OrderedDict([('sub1', 110), ('sub2', 133), ('pairID', 'practice'), ('trialID', 1), ('stim1', 'stimuli/own/kitchen/110_kit.jpg'), ('stim2', 'stimuli/own/kitchen/133_kit.jpg')]),
      OrderedDict([('sub1', 110), ('sub2', 128), ('pairID', 'practice'), ('trialID', 2), ('stim1', 'stimuli/own/kitchen/110_kit.jpg'), ('stim2', 'stimuli/own/kitchen/128_kit.jpg')]),
      OrderedDict([('sub1', 128), ('sub2', 108), ('pairID', 'practice'), ('trialID', 3), ('stim1', 'stimuli/own/kitchen/128_kit.jpg'), ('stim2', 'stimuli/own/kitchen/108_kit.jpg')]),
      OrderedDict([('sub1', 110), ('sub2', 107), ('pairID', 'practice'), ('trialID', 4), ('stim1', 'stimuli/own/kitchen/110_kit.jpg'), ('stim2', 'stimuli/own/kitchen/107_kit.jpg')]),
      OrderedDict([('sub1', 107), ('sub2', 108), ('pairID', 'practice'), ('trialID', 5), ('stim1', 'stimuli/own/kitchen/107_kit.jpg'), ('stim2', 'stimuli/own/kitchen/108_kit.jpg')]),
      OrderedDict([('sub1', 128), ('sub2', 133), ('pairID', 'practice'), ('trialID', 6), ('stim1', 'stimuli/own/kitchen/128_kit.jpg'), ('stim2', 'stimuli/own/kitchen/133_kit.jpg')]),
      OrderedDict([('sub1', 107), ('sub2', 128), ('pairID', 'practice'), ('trialID', 7), ('stim1', 'stimuli/own/kitchen/107_kit.jpg'), ('stim2', 'stimuli/own/kitchen/128_kit.jpg')]),
      OrderedDict([('sub1', 108), ('sub2', 110), ('pairID', 'practice'), ('trialID', 8), ('stim1', 'stimuli/own/kitchen/108_kit.jpg'), ('stim2', 'stimuli/own/kitchen/110_kit.jpg')])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
    Routine trial
    Routine ITI
  LoopTerminator practice
  Routine practice_over
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $trial_condition_path
    loopType = random
    nReps = 1
    random seed = seed_num
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    conditions:
      [OrderedDict([('sub1', 105), ('sub2', 132), ('pairID', 157), ('trialID', 1), ('stim1', 'stimuli/own/bathroom/105_bat.jpg'), ('stim2', 'stimuli/own/bathroom/132_bat.jpg')]),
      OrderedDict([('sub1', 109), ('sub2', 130), ('pairID', 214), ('trialID', 2), ('stim1', 'stimuli/own/bathroom/109_bat.jpg'), ('stim2', 'stimuli/own/bathroom/130_bat.jpg')]),
      OrderedDict([('sub1', 122), ('sub2', 129), ('pairID', 483), ('trialID', 3), ('stim1', 'stimuli/own/bathroom/122_bat.jpg'), ('stim2', 'stimuli/own/bathroom/129_bat.jpg')]),
      OrderedDict([('sub1', 120), ('sub2', 126), ('pairID', 446), ('trialID', 4), ('stim1', 'stimuli/own/bathroom/120_bat.jpg'), ('stim2', 'stimuli/own/bathroom/126_bat.jpg')]),
      OrderedDict([('sub1', 118), ('sub2', 131), ('pairID', 411), ('trialID', 5), ('stim1', 'stimuli/own/bathroom/118_bat.jpg'), ('stim2', 'stimuli/own/bathroom/131_bat.jpg')]),
      OrderedDict([('sub1', 102), ('sub2', 141), ('pairID', 69), ('trialID', 6), ('stim1', 'stimuli/own/bathroom/102_bat.jpg'), ('stim2', 'stimuli/own/bathroom/141_bat.jpg')]),
      OrderedDict([('sub1', 131), ('sub2', 135), ('pairID', 588), ('trialID', 7), ('stim1', 'stimuli/own/bathroom/131_bat.jpg'), ('stim2', 'stimuli/own/bathroom/135_bat.jpg')]),
      OrderedDict([('sub1', 111), ('sub2', 136), ('pairID', 247), ('trialID', 8), ('stim1', 'stimuli/own/bathroom/111_bat.jpg'), ('stim2', 'stimuli/own/bathroom/136_bat.jpg')])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
    Routine breakBlocks
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine end
